/*
    Adding a few synapses.
    Distribution is random but reproducible.
*/

connection_weight = 0.0002

/* Initialize parameters */

n_synapses = 20
max_distance = 300 // Maximum distance from the soma is 300 um

/*
    Initialize the arrays for synapses and their connections
*/
objref synapses[n_synapses]
objref spikeSources[n_synapses]
objref stimuli[n_synapses]
objref connections[n_synapses]

double synapse_dendrites[n_synapses]
double synapse_locations[n_synapses]
double synapse_delays[n_synapses]
double synapse_distances[n_synapses]

/*
    Count the number of apical dendrites
*/
n_apical_dendrites = 0
forsec "apical_dendrite" {
    n_apical_dendrites += 1
}

/*
    Initialize a random number generator (with a uniform
    distribution) for picking a random apical dendrite
*/
objref random_apical_gen
random_apical_gen = new Random()
random_apical_gen.MCellRan4(42) // Setting a random seed
random_apical_gen.uniform(0, n_apical_dendrites)

/*
    Initialize a random number generator for picking the
    location within a section
*/
objref random_pos
random_pos = new Random(132)
random_pos.MCellRan4()
random_pos.uniform(0, 1)

/*
    Initialize a random number generator for delay of
    the synaptic inputs, ranging from 0 to 200 ms
*/
objref random_delay
random_delay = new Random()
random_delay.MCellRan4()
random_delay.uniform(0, 200)

for i = 0, n_synapses - 1 {
    print "Inserting synapse ", i + 1

    // Keep choosing a random apical dendrite and a position
    // along the apical dendrite until the distance to the
    // soma is less than 300 um
    distance_to_soma = max_distance + 1
    while(distance_to_soma > max_distance) {
        dendrite_idx = int(random_apical_gen.repick())
        loc_pos = random_pos.repick()

        access apical_dendrite[dendrite_idx]
        distance_to_soma = distance(loc_pos)
    }

    print "Randomly selected apical dendrite: ", dendrite_idx
    print "Randomly selected location: ", loc_pos
    print "Randomly determined distance to soma: ", distance_to_soma

    // Initialize the synapse
    apical_dendrite[dendrite_idx] synapses[i] = new MyExp2Syn(loc_pos)
    synapses[i].tau1 = 0.5
    synapses[i].tau2 = 1
    synapses[i].e = 0

    // Initialize the spike source
    spikeSources[i] = new BurstCell3()

    // Initialize the stimulus
    stimuli[i] = spikeSources[i].stim
    stimuli[i].number = 4
    stimuli[i].interval = 25  // ms
    stimuli[i].noise = 0
    stimuli[i].burstlen = 100  // ms
    stimuli[i].burstint = 250 - stimuli[i].burstlen // ms

    // Connect the synapse to the stimulus
    connections[i] = new NetCon(stimuli[i], synapses[i])
    connections[i].delay = int(random_delay.repick())
    connections[i].weight = connection_weight

    print "The synapse will receive input at ", connections[i].delay, "ms"
    print ""

    // Save synapse information
    synapse_dendrites[i] = dendrite_idx
    synapse_locations[i] = loc_pos
    synapse_delays[i] = connections[i].delay
    synapse_distances[i] = distance_to_soma
}
