// based on initxstimu.hoc
// extracellular stimulation
load_file("nrngui.hoc")

//load_file("cellspec_c62564.hoc") // specifies anatomical and biophysical properties
//load_file("cellspec_5038804.hoc")
celsius=35
create cylinder
cylinder {
	pt3dclear()
	pt3dadd(0, 0, 0, 1)
	pt3dadd(500, 0, 0, 1)
	insert pas cm=1 Ra=150 e_pas=-65 g_pas=1/28000
}
access cylinder
load_file("setnseg.hoc")
distance()

//load_file("biophys.hoc")

forall {
  insert extracellular
//  insert xtra
  insert xtrau
}
//load_file("setnseg.hoc")
//load_file("anatscale.hoc")	// show xyz scale bars
// load_file("interpxyz.hoc")	// only interpolates sections that have xtra
load_file("interpxyzu.hoc")	// only interpolates sections that have xtrau
// load_file("setpointers.hoc")	// automatically calls grindaway() in interpxyz.hoc
load_file("setpointersu.hoc")	// automatically calls grindaway() in interpxyzu.hoc
//load_file("rigc2.ses")		// RunControl, graphs of v, vext, e_extracellular
// load_file("rigxc.ses")	// graph of er_xtra, just for diagnostic|development purposes
// load_file("field.hoc")	// computes extracellularly recorded potential vrec
// load_file("vrecc.ses")	// graph of vrec(t)
load_file("calcrxcu.hoc")	// computes transfer r between segments and recording electrodes
load_file("calcd.hoc")	// computes scale factor used to calculate extracellular potential
			//   produced by a uniform electrical field
// load_file("iclampc.ses")	// intracellular stimulus
// load_file("stim.hoc")		// extracellular stimulus
// load_file("stimu.hoc")		// extracellular stimulus
load_file("zapustimu.hoc")		// extracellular stimulus
// load_file("msgxc.hoc")	// minimal hints
// load_file("msgxcu.hoc")		// minimal hints

proc init() {
	t = 0
	forall {
		v = Vrest
		if(ismembrane("nax") || ismembrane("na3")) {
			ena=55
		}
		if(ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {
			ek=-90
		}
		if(ismembrane("hd")) {
			ehd_hd=-30
		}
	}
	finitialize(Vrest)
	fcurrent()
	forall {
		for(x) {
			if(ismembrane("na3") || ismembrane("nax")) {
				e_pas(x)=v(x)+(ina(x)+ik(x))/g_pas(x)
			}
			if(ismembrane("hd")) {
				e_pas(x)=e_pas(x)+i_hd(x)/g_pas(x)
			}
		}
	}
}


