load_file("nrngui.hoc")

load_file("cellspec_c62564.hoc") // specifies anatomical and biophysical properties
//load_file("cellspec_5038804.hoc")
load_file("biophys.hoc")
load_file("fluct.hoc")

forall {
  insert extracellular
  insert xtrau
}
load_file("interpxyzu.hoc")	// only interpolates sections that have xtrau
load_file("setpointersu.hoc")	// automatically calls grindaway() in interpxyzu.hoc
//load_file("rigc.ses")		// RunControl, graphs of v, vext, e_extracellular
load_file("calcrxcu.hoc")	// computes transfer r between segments and recording electrodes
load_file("calcd.hoc")	// computes scale factor used to calculate extracellular potential
load_file("zapstimu.hoc")		// extracellular stimulus

proc init() {
	t = 0
	forall {
		v = Vrest
		if(ismembrane("nax") || ismembrane("na3")) {
			ena=55
		}
		if(ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {
			ek=-90
		}
		if(ismembrane("hd")) {
			ehd_hd=-30
		}
	}
	finitialize(Vrest)
	fcurrent()
	forall {
		for(x) {
			if(ismembrane("na3") || ismembrane("nax")) {
				e_pas(x)=v(x)+(ina(x)+ik(x))/g_pas(x)
			}
			if(ismembrane("hd")) {
				e_pas(x)=e_pas(x)+i_hd(x)/g_pas(x)
			}
		}
	}
}


tstop = 1100
setstim(0, tstop, 50, 50, 0)

proc sim() {
		pn=1
		setpercnoise(pn)
		amp=200
		setstim(100, 1000, 50, 50, amp)
		run()
}

load_file("audizione.ses")
PlotShape[0].exec_menu("Shape Plot")
PlotShape[0].exec_menu("Show Diam")


ph=0
xpanel("ef slider")
xlabel("                                 ")
xslider(&ph,0,360,"changefield(100,ph,90)")
xpanel()
